PsychoPy2experiment version="2024.2.4"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = seizuremachine
  keyboardBackend = ioHub
  runMode = 0
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Routines
  Routine trial
    MouseComponent mouse
      forceEndRoutineOnPress = never
      saveMouseState = every frame
      startVal [time (s)] = 0.0
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
    PolygonComponent cursor
      fillColor = 1.0000, -1.0000, -1.0000
      pos [set every frame] = mouse.getPos()
      shape = circle
      size = (0.0125, 0.0125)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle1
      draggable = True
      fillColor [set every frame] = [1,1,1]
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1, 1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle2
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 45
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle3
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 90
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle4
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 135
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle5
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 180
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle6
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 225
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle7
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 270
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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    PolygonComponent triangle8
      draggable = True
      fillColor [set every frame] = [1,1,1]
      ori = 315
      pos [set every frame] = (mouse.getPos()[0], mouse.getPos()[1])
      shape = triangle
      size = (1,1)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
